PsychoPy2experiment version="1.73.06"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine Tap
    TextComponent text_2
      text [set every repeat] = $finger
      stopVal [duration (s)] = 16.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    KeyboardComponent key_resp
      forceEndRoutine = True
      allowedKeys = 'plus', 't'
      startVal [time (s)] = 0.0
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    TextComponent text
      text = Get ready to tap
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine End
    TextComponent text_4
      text = Done!
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Baseline
    TextComponent text_5
      text = +
      stopVal [duration (s)] = 30.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Rest
    TextComponent text_3
      text = +
      stopVal [duration (s)] = 16.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine trial
  Routine Baseline
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/fingertap.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'finger': u'Left'},
      {u'finger': u'Right'},
      {u'finger': u'Left'},
      {u'finger': u'Left'},
      {u'finger': u'Right'},
      {u'finger': u'Right'},
      {u'finger': u'Right'},
      {u'finger': u'Left'},
      {u'finger': u'Left'}]
    Routine Rest
    Routine Tap
  LoopTerminator trials
  Routine Rest
  Routine End
