PsychoPy2experiment version="1.73.06"
Settings
  Save csv file = True
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Experiment info = {'subjID':''}
  Save excel file = True
  Units = use prefs
  Saved data folder = /home/rt/subjects/'+expInfo['subjID']+'/ltTaskData/Bird_1back/
  Screen = 2
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Routines
  Routine trial
    TextComponent task
      opacity [set every repeat] = 1
      text [set every repeat] = $condition
      stopVal [duration (s)] = 1.4
      pos = [0, 300]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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    PatchComponent show_visual
      opacity [set every repeat] = showprompt
      stopVal [duration (s)] = 1.2
      sf = None
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.abspath("./Stimuli/visual_bird/bird%s.jpg"%($visuall))
      size = [600, 440]
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    SoundComponent play_sound
      sound [set every repeat] = os.path.abspath("./Stimuli/%s/normalized/call%s.wav"%($sounddir,$audioo))
      volume [set every repeat] = showprompt
      stopVal [duration (s)] = 1.4
      startVal [time (s)] = 0
    KeyboardComponent trial_resp
      stopVal [time (s)] = 1.4
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'b','1'
      startVal [time (s)] = 0.0
      store = first key
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  Routine hello
    TextComponent get_ready
      text = Get ready to begin!
      durationEstim = 100
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    KeyboardComponent start_expt
      durationEstim = 100
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 't','+','plus','5'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine goodbye
    TextComponent text_2
      text = Good job!
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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  Routine hello1
    TextComponent hello_hello
      text = Please press the button when you are ready.
      durationEstim = 100
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent proceed_key
      durationEstim = 100
      forceEndRoutine = True
      allowedKeys = 'b','1'
      startVal [time (s)] = 0.0
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Flow
  Routine hello1
  Routine hello
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Run-Designs/bird_nback1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'audioTarget': -1, 'audioo': 4, 'block': 2, 'superblock': 1, 'showprompt': 1, 'visualTarget': -1, 'visuall': u'1', 'sounddir': u'bird', 'condition': u'Visual'},
      {'audioTarget': -1, 'audioo': 6, 'block': 2, 'superblock': 1, 'showprompt': 1, 'visualTarget': 1, 'visuall': u'1', 'sounddir': u'bird', 'condition': u'Visual'},
      {'audioTarget': -1, 'audioo': 1, 'block': 2, 'superblock': 1, 'showprompt': 1, 'visualTarget': 1, 'visuall': u'1', 'sounddir': u'bird', 'condition': u'Visual'},
      {'audioTarget': -1, 'audioo': 4, 'block': 2, 'superblock': 1, 'showprompt': 1, 'visualTarget': -1, 'visuall': u'4', 'sounddir': u'bird', 'condition': u'Visual'},
      {'audioTarget': -1, 'audioo': 5, 'block': 2, 'superblock': 1, 'showprompt': 1, 'visualTarget': -1, 'visuall': u'2', 'sounddir': u'bird', 'condition': u'Visual'},
      {'audioTarget': -1, 'audioo': 1, 'block': 2, 'superblock': 1, 'showprompt': 1, 'visualTarget': -1, 'visuall': u'5', 'sounddir': u'bird', 'condition': u'Visual'},
      {'audioTarget': -1, 'audioo': 4, 'block': 2, 'superblock': 1, 'showprompt': 1, 'visualTarget': -1, 'visuall': u'3', 'sounddir': u'bird', 'condition': u'Visual'},
      {'audioTarget': -1, 'audioo': 6, 'block': 2, 'superblock': 1, 'showprompt': 1, 'visualTarget': -1, 'visuall': u'1', 'sounddir': u'bird', 'condition': u'Visual'},
      {'audioTarget': -1, 'audioo': 1, 'block': 2, 'superblock': 1, 'showprompt': 1, 'visualTarget': -1, 'visuall': u'6', 'sounddir': u'bird', 'condition': u'Visual'}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
    Routine trial
  LoopTerminator trials
  Routine goodbye
