PsychoPy2experiment version="1.73.06"
Settings
  Save csv file = True
  Monitor = testMonitor
  Window size (pixels) = [1280, 1024]
  Full-screen window = False
  Experiment info = {'participant':'', 'session':'001'}
  Save excel file = True
  logging level = debug
  Units = use prefs
  Screen = 2
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Routines
  Routine smileyface
    PatchComponent patch_5
      opacity [set every repeat] = $FB
      stopVal [duration (s)] = 2
      pos = [0, 0.75]
      sf = None
      startVal [time (s)] = 0.0
      image [set every repeat] = $image
      size = [0.25, 0.25]
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    CodeComponent code_2
      Begin Experiment:
        patch_3=visual.PatchStim(win=win, name='patch_3',
            tex=u'images/smiley_face.jpg', mask=None,
            ori=0, pos=[0, -0.75], size=[0.25, 0.25], sf=None, phase=0.0,
            color=[1,1,1], colorSpace=u'rgb', opacity=1,
            texRes=128, interpolate=False, depth=0.0)

        patch_4=visual.PatchStim(win=win, name='patch_4',
            tex=u'images/flat_face.jpg', mask=None,
            ori=0, pos=[0, -0.75], size=[0.25, 0.25], sf=None, phase=0.0,
            color=[1,1,1], colorSpace=u'rgb', opacity=1,
            texRes=128, interpolate=False, depth=0.0)

        text_5=visual.TextStim(win=win, ori=0, name='text_5',
            text=u'Rest',
            font=u'Arial',
            pos=[0, 0], height=0.1,wrapWidth=None,
            color=u'white', colorSpace=u'rgb', opacity=1.0,
            depth=-2.0)
      Each Frame:
        if (fb>th and arrow=='up' and FB) or (fb<th and arrow == 'down' and FB):
            patch_3.draw()

        elif (fb<th and arrow=='up' and FB) or (fb>th and arrow=='down' and FB):
            patch_4.draw()

        t = ThermBase(win, [0.25,1],[-0.125,-0.5])
        if FB:
            t.plot(fb,th,arrow,frameN)
            t.draw()
        else:
            text_5.draw()
      Begin Routine:
        rtdata = rt.check(arrow)[0]
        fb = get_feedback(rt,arrow,14)
        Feedbacks[arrow].append(fb)
        Targets[arrow].append(th)
      End Routine:
        rt.check(arrow+'_smile_fb')
  Routine end
    TextComponent text_5_end
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Good Job!

        Get ready for the next run!
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent text_6
      text [set every repeat] = $run_num
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_5
      Begin Routine:
        if run_num==6:
          text_5_end.setText("Good Job!\n\n")
        rt.save(filename[:-5]+'_run_%s'%expInfo['session']+'.npz',Feedbacks,Targets)
        rt.close()
  Routine feedback
    PatchComponent patch_2
      opacity [set every repeat] = 1
      stopVal [duration (s)] = 2
      pos = [0, 0.75]
      sf = None
      startVal [time (s)] = 0.0
      image [set every repeat] = $image
      size = [0.25, 0.25]
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    CodeComponent code
      Begin Experiment:
        def extract(rt,dr,mask='active'):
            trials = np.asarray(rt.trial_type[mask])
            data = np.asarray(rt.data[mask])
            if (trials==dr).any():
                return data[trials==dr].tolist()
            else:
                return []
      Each Frame:
        t = ThermBase(win, [0.25,1],[-0.125,-0.5])
        if FB:
            t.plot(fb,th,arrow,frameN)
        t.draw()
      Begin Routine:
        rtdata = rt.check(arrow)[0]
        fb = get_feedback(rt,arrow,7)
        Feedbacks[arrow].append(fb)

        if FB  or expInfo['session']=='006':
            th = get_target(Feedbacks,arrow)
        Targets[arrow].append(th)
      End Routine:
        rt.check(arrow+'_fb')
  Routine stimulus
    PatchComponent patch
      stopVal [duration (s)] = 15.5
      pos = [0, 0.75]
      sf = None
      startVal [time (s)] = 0.0
      image [set every repeat] = $image
      size = [0.25, 0.25]
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    TextComponent text_5_fake
      opacity = 0
      color = grey
      text [set every repeat] = $arrow
      stopVal [duration (s)] = 0.0
      pos = [0, 1]
      startVal [time (s)] = 0.0
      letterHeight = 0.0
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    CodeComponent code_4
      End Routine:
        rt.check(arrow)
  Routine rest
    TextComponent text_2
      text [set every repeat] = Rest
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_7
      End Routine:
        rt.check('rest')
  Routine trial
    TextComponent Intro
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space','1','2'
      startVal [time (s)] = 0.0
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  Routine trigger
    TextComponent text
      text = Waiting for scanner trigger ...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Begin Experiment:
        condition_file = '/home/rt/subjects/pilot15/session9/conditions/mTBIconditions%s.csv'%expInfo['session'][-1]
  Routine question_maybe
    TextComponent text_4
      text [set every repeat] = $q_or_r
      stopVal [duration (s)] = 4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_6
      Begin Experiment:
        rating=visual.RatingScale(win=win, name='rating', escapeKeys=['escape'], displaySizeFactor=1.00,
            pos=[0.0, -0.4], markerStart=4, leftKeys='1', rightKeys='2', scale=' ')
      Each Frame:
        if not q_or_r =='Rest':
            rating.draw()
            if rating.noResponse == False:
                rating.status = FINISHED
                rating.response = rating.getRating()
                rating.rt = rating.getRT()
      Begin Routine:
        rating.reset()
        rating.status = NOT_STARTED
      End Routine:
        if q_or_r=='Rest':
            rt.check('rest')
        else:
            rt.check(q_or_r)
      End Experiment:
        trials.addData('rating.rt', rating.getRT())
  Routine baseline
    TextComponent text_3
      text = Rest
      stopVal [duration (s)] = 30
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_3
      Begin Experiment:
        from scripts.feedback import ThermBase, get_target, get_feedback
        from scripts.xmlparse import RT
        import numpy as np
        rt = RT()
        run_num = 1
      Begin Routine:
        Feedbacks = {'up':[],'down':[]}
        Targets = {'up':[],'down':[]}
        run_num = int(expInfo['session'])
        if run_num==1:
            th = 0  # initialize thresholds
            FB = 0
        else:
            if run_num==6:
                FB = 0
            else:
                FB = 1
            # get lastrun's data
            prevfilename = filename[:-5]+'_run_%03d'%(run_num-1)+'.npz'
            try:
                lastrun = np.load(prevfilename)
            except:
                prevExp = {'previous_data':prevfilename}  #dialog box dictionary
                dlg_lastrun=gui.DlgFromDict(prevExp,title='Find Previous Data')
                if dlg_lastrun.OK==False: core.quit() #user pressed cancel
                lastrun = np.load(prevExp['previous_data'])
            Feedbacks = lastrun["Feedbacks"].tolist()
        _window = (-4,-1)
        _target_window = -4
        FB=bool(FB)
      End Routine:
        rt.check('baseline')
Flow
  Routine trigger
  Routine baseline
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $condition_file
    loopType = sequential
    nReps = 1
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    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine stimulus
      Routine feedback
    LoopTerminator trials_2
    Routine stimulus
    Routine question_maybe
    Routine smileyface
    Routine rest
  LoopTerminator trials
  Routine end
